<?xml version="1.0" encoding="UTF-8"?>
<configuration>
    <version>2</version>

    <readers>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>AcquisitionReader</classname>
        </reader>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>WaveformReader</classname>
        </reader>
    </readers>

    <writers>
        <writer>
            <dll>gadgetron_core_writers</dll>
            <classname>ImageWriter</classname>
        </writer>
    </writers>

    <stream>
        <gadget>
            <name>NoiseAdjust</name>
            <dll>gadgetron_mricore</dll>
            <classname>NoiseAdjustGadget</classname>
        </gadget>

        <gadget>
            <name>AsymmetricEcho</name>
            <dll>gadgetron_mricore</dll>
            <classname>AsymmetricEchoAdjustROGadget</classname>
        </gadget>

        <gadget>
            <name>RemoveROOversampling</name>
            <dll>gadgetron_mricore</dll>
            <classname>RemoveROOversamplingGadget</classname>
        </gadget>

        <external>
            <writers>
                <writer>
                    <dll>gadgetron_core_writers</dll>
                    <classname>AcquisitionWriter</classname>
                </writer>
            </writers>
            <readers>
                <reader>
                    <dll>gadgetron_core_readers</dll>
                    <classname>ImageReader</classname>
                </reader>
            </readers>
            <socket type="unix" address="/tmp/gadgetron/external/conn"/>
            <exec cmd="matlab --console recon_image.m"/>
        </external>
    </stream>
</configuration>
