<?xml version="1.0" encoding="UTF-8"?>
<configuration>
    <version>2</version>

    <readers>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>AcquisitionReader</classname>
        </reader>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>WaveformReader</classname>
        </reader>
    </readers>

    <writers>
        <writer>
            <dll>gadgetron_core_writers</dll>
            <classname>ImageWriter</classname>
        </writer>
    </writers>

    <stream>
        <gadget>
            <name>NoiseAdjust</name>
            <dll>gadgetron_mricore</dll>
            <classname>NoiseAdjustGadget</classname>
        </gadget>

        <gadget>
            <name>AsymmetricEcho</name>
            <dll>gadgetron_mricore</dll>
            <classname>AsymmetricEchoAdjustROGadget</classname>
        </gadget>

        <gadget>
            <name>RemoveROOversampling</name>
            <dll>gadgetron_mricore</dll>
            <classname>RemoveROOversamplingGadget</classname>
        </gadget>

        <external>
            <execute name="accumulate_and_recon" type="python" target="AccumulateAndRecon"/>
            <!-- External also accepts already running processes; use: <connect port="12345"/> -->

            <!-- The configuration is sent to the external process. It's left pretty empty here. -->
            <configuration/>
        </external>

        <gadget>
            <name>Extract</name>
            <dll>gadgetron_mricore</dll>
            <classname>ExtractGadget</classname>
        </gadget>

        <gadget>
            <name>Autoscale</name>
            <dll>gadgetron_mricore</dll>
            <classname>AutoScaleGadget</classname>
        </gadget>

        <gadget>
            <name>FloatToShort</name>
            <dll>gadgetron_mricore</dll>
            <classname>FloatToUShortGadget</classname>
        </gadget>
    </stream>
</configuration>
