<?xml version="1.0" encoding="utf-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

    <!--
       _____              _____     _____   ______   _______   _____     ____    _   _ 
      / ____|     /\     |  __ \   / ____| |  ____| |__   __| |  __ \   / __ \  | \ | |
     | |  __     /  \    | |  | | | |  __  | |__       | |    | |__) | | |  | | |  \| |
     | | |_ |   / /\ \   | |  | | | | |_ | |  __|      | |    |  _  /  | |  | | | . ` |
     | |__| |  / ____ \  | |__| | | |__| | | |____     | |    | | \ \  | |__| | | |\  |
      \_____| /_/    \_\ |_____/   \_____| |______|    |_|    |_|  \_\  \____/  |_| \_|
                                                                                       
    -->

    <!-- reader -->
    <reader><slot>1008</slot><dll>gadgetron_mricore</dll><classname>GadgetIsmrmrdAcquisitionMessageReader</classname></reader>
    <reader><slot>1026</slot><dll>gadgetron_mricore</dll><classname>GadgetIsmrmrdWaveformMessageReader</classname></reader>

    <!-- writer -->
    <writer><slot>1022</slot><dll>gadgetron_mricore</dll><classname>MRIImageWriter</classname></writer>

    <!-- store the incoming data -->
	<gadget>
        <name>IsmrmrdDump</name>
        <dll>gadgetron_mricore</dll>
        <classname>IsmrmrdDumpGadget</classname>
        <property><name>file_prefix</name><value>LGE_PSIRNet</value></property>
    </gadget>
	
    <!-- Noise prewhitening -->
    <gadget>
        <name>NoiseAdjust</name>
        <dll>gadgetron_mricore</dll>
        <classname>NoiseAdjustGadget</classname>
    </gadget>

    <!-- RO asymmetric echo handling -->
    <gadget><name>AsymmetricEcho</name><dll>gadgetron_mricore</dll><classname>AsymmetricEchoAdjustROGadget</classname></gadget>

    <!-- RO oversampling removal -->
    <gadget><name>RemoveROOversampling</name><dll>gadgetron_mricore</dll><classname>RemoveROOversamplingGadget</classname></gadget>

    <!-- Data accumulation and trigger gadget -->
    <gadget>
        <name>RefDelayedBuf</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconReferenceKSpaceDelayedBufferGadget</classname>
    </gadget>

    <gadget>
        <name>AccTrig</name>
        <dll>gadgetron_mricore</dll>
        <classname>AcquisitionAccumulateTriggerGadget</classname>
        <property><name>trigger_dimension</name><value>slice</value></property>
        <property><name>sorting_dimension</name><value></value></property>
    </gadget>

    <gadget>
        <name>BucketToBuffer</name>
        <dll>gadgetron_mricore</dll>
        <classname>BucketToBufferGadget</classname>
        <property><name>N_dimension</name><value>average</value></property>
        <property><name>S_dimension</name><value>set</value></property>
        <property><name>split_slices</name><value>false</value></property>
        <property><name>ignore_segment</name><value>true</value></property>
    </gadget>

    <!-- Prep ref -->
    <gadget>
        <name>PrepRef</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconCartesianReferencePrepGadget</classname>

        <!-- parameters for debug and timing -->
        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>true</value></property>
        <property><name>verbose</name><value>true</value></property>

        <!-- averaging across repetition -->
        <property><name>average_all_ref_N</name><value>true</value></property>
        <!-- every set has its own kernels -->
        <property><name>average_all_ref_S</name><value>true</value></property>
        <!-- whether always to prepare ref if no acceleration is used -->
        <property><name>prepare_ref_always</name><value>true</value></property>
    </gadget>

    <!-- Coil compression -->
    <gadget>
        <name>CoilCompression</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconEigenChannelGadget</classname>

        <!-- parameters for debug and timing -->
        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>true</value></property>
        <property><name>verbose</name><value>false</value></property>

        <property><name>average_all_ref_N</name><value>true</value></property>
        <property><name>average_all_ref_S</name><value>true</value></property>

        <!-- Up stream coil compression -->
        <property><name>upstream_coil_compression</name><value>true</value></property>
        <property><name>upstream_coil_compression_thres</name><value>-1</value></property>
        <property><name>upstream_coil_compression_num_modesKept</name><value>-1</value></property>
    </gadget>

    <!-- Recon -->
    <gadget>
        <name>Recon</name>
        <dll>gadgetron_cmr</dll>
        <classname>CmrPSIRNetGadget</classname>

        <property><name>model</name><value>PSIRNet.pts</value></property>
        <property><name>send_out_mag_IR</name><value>true</value></property>
        <property><name>scale_factor_after_SCC</name><value>1000.0</value></property>
        <property><name>offset_factor_after_SCC</name><value>2048.0</value></property>

        <!-- parameters for debug and timing -->
        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>true</value></property>
        <property><name>verbose</name><value>true</value></property>
    </gadget>

    <!-- FOV Adjustment -->
    <gadget>
        <name>FOVAdjustment</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconFieldOfViewAdjustmentGadget</classname>

        <!-- parameters for debug and timing -->
        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>false</value></property>
        <property><name>verbose</name><value>false</value></property>
    </gadget>

    <!-- ImageArray to images -->
    <gadget>
        <name>ImageArraySplit</name>
        <dll>gadgetron_mricore</dll>
        <classname>ImageArraySplitGadget</classname>
    </gadget>

    <!-- after recon processing -->
    <gadget>
        <name>ComplexToFloatAttrib</name>
        <dll>gadgetron_mricore</dll>
        <classname>ComplexToFloatGadget</classname>
    </gadget>

    <gadget>
        <name>FloatToShortAttrib</name>
        <dll>gadgetron_mricore</dll>
        <classname>FloatToUShortGadget</classname>
        <property><name>max_intensity</name><value>32767</value></property>
        <property><name>min_intensity</name><value>0</value></property>
        <property><name>intensity_offset</name><value>0</value></property>
    </gadget>

    <gadget>
        <name>ImageFinish</name>
        <dll>gadgetron_mricore</dll>
        <classname>ImageFinishGadget</classname>
    </gadget>

</gadgetronStreamConfiguration>
