<?xml version="1.0" encoding="utf-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

    <!-- ImageArray to images -->
    <gadget>
        <name>ImageArraySplit</name>
        <dll>gadgetron_mricore</dll>
        <classname>ImageArraySplitGadget</classname>
    </gadget>

    <gadget>
        <name>ComplexToFloatAttrib</name>
        <dll>gadgetron_mricore</dll>
        <classname>ComplexToFloatGadget</classname>
    </gadget>

    <gadget>
        <name>FloatToShortAttrib</name>
        <dll>gadgetron_mricore</dll>
        <classname>FloatToUShortGadget</classname>
    </gadget>

</gadgetronStreamConfiguration>
