<?xml version="1.0" encoding="utf-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

    <!--
        Gadgetron T1 saturation recovery mapping for cardiac MRI

        Triggered by slice
        Recon N is set and S is contrast

        Author: Hui Xue
        Magnetic Resonance Technology Program, National Heart, Lung and Blood Institute, National Institutes of Health
        10 Center Drive, Bethesda, MD 20814, USA
        Email: hui.xue@nih.gov
    -->

    <!-- reader -->
    <reader><slot>1008</slot><dll>gadgetron_mricore</dll><classname>GadgetIsmrmrdAcquisitionMessageReader</classname></reader>
    <reader><slot>1026</slot><dll>gadgetron_mricore</dll><classname>GadgetIsmrmrdWaveformMessageReader</classname></reader>

    <!-- writer -->
    <writer><slot>1022</slot><dll>gadgetron_mricore</dll><classname>MRIImageWriter</classname></writer>

    <!-- Noise prewhitening -->
    <gadget><name>NoiseAdjust</name><dll>gadgetron_mricore</dll><classname>NoiseAdjustGadget</classname></gadget>

    <!-- RO asymmetric echo handling -->
    <gadget><name>AsymmetricEcho</name><dll>gadgetron_mricore</dll><classname>AsymmetricEchoAdjustROGadget</classname></gadget>

    <!-- RO oversampling removal -->
    <gadget><name>RemoveROOversampling</name><dll>gadgetron_mricore</dll><classname>RemoveROOversamplingGadget</classname></gadget>

    <!-- Data accumulation and trigger gadget -->
    <gadget>
        <name>AccTrig</name>
        <dll>gadgetron_mricore</dll>
        <classname>AcquisitionAccumulateTriggerGadget</classname>
        <property><name>trigger_dimension</name><value>slice</value></property>
        <property><name>sorting_dimension</name><value></value></property>
    </gadget>

    <gadget>
        <name>BucketToBuffer</name>
        <dll>gadgetron_mricore</dll>
        <classname>BucketToBufferGadget</classname>
        <property><name>N_dimension</name><value>set</value></property>
        <property><name>S_dimension</name><value>contrast</value></property>
        <property><name>split_slices</name><value>false</value></property>
        <property><name>ignore_segment</name><value>true</value></property>
    </gadget>

    <!-- Prep ref -->
    <gadget>
        <name>PrepRef</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconCartesianReferencePrepGadget</classname>

        <!-- parameters for debug and timing -->
        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>true</value></property>
        <property><name>verbose</name><value>true</value></property>

        <!-- averaging across repetition -->
        <property><name>average_all_ref_N</name><value>true</value></property>
        <!-- every set has its own kernels -->
        <property><name>average_all_ref_S</name><value>true</value></property>
        <!-- whether always to prepare ref if no acceleration is used -->
        <property><name>prepare_ref_always</name><value>true</value></property>
    </gadget>

    <!-- Coil compression -->
    <gadget>
        <name>CoilCompression</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconEigenChannelGadget</classname>

        <!-- parameters for debug and timing -->
        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>false</value></property>
        <property><name>verbose</name><value>false</value></property>

        <property><name>average_all_ref_N</name><value>true</value></property>
        <property><name>average_all_ref_S</name><value>true</value></property>

        <!-- Up stream coil compression -->
        <property><name>upstream_coil_compression</name><value>true</value></property>
        <property><name>upstream_coil_compression_thres</name><value>-1</value></property>
        <property><name>upstream_coil_compression_num_modesKept</name><value>0</value></property>
    </gadget>

    <!-- Recon -->
    <gadget>
        <name>Recon</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconCartesianGrappaGadget</classname>

        <!-- image series -->
        <property><name>image_series</name><value>0</value></property>

        <!-- Coil map estimation, Inati or Inati_Iter -->
        <property><name>coil_map_algorithm</name><value>Inati</value></property>

        <!-- Down stream coil compression -->
        <property><name>downstream_coil_compression</name><value>true</value></property>
        <property><name>downstream_coil_compression_thres</name><value>0.01</value></property>
        <property><name>downstream_coil_compression_num_modesKept</name><value>0</value></property>

        <!-- parameters for debug and timing -->
        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>true</value></property>
        <property><name>verbose</name><value>true</value></property>

        <!-- whether to send out gfactor -->
        <property><name>send_out_gfactor</name><value>true</value></property>
    </gadget>

    <!-- Partial fourier handling 
    <gadget>
        <name>PartialFourierHandling</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconPartialFourierHandlingFilterGadget</classname>

        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>false</value></property>
        <property><name>verbose</name><value>false</value></property>

        <property><name>skip_processing_meta_field</name><value>Skip_processing_after_recon</value></property>

        <property><name>partial_fourier_filter_RO_width</name><value>0.15</value></property>
        <property><name>partial_fourier_filter_E1_width</name><value>0.15</value></property>
        <property><name>partial_fourier_filter_E2_width</name><value>0.15</value></property>
        <property><name>partial_fourier_filter_densityComp</name><value>false</value></property>
    </gadget>
    -->

    <!-- Partial fourier handling -->
    <gadget>
        <name>PartialFourierHandling</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconPartialFourierHandlingPOCSGadget</classname>

        <!-- parameters for debug and timing -->
        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>false</value></property>
        <property><name>verbose</name><value>false</value></property>

        <!-- if incoming images have this meta field, it will not be processed -->
        <property><name>skip_processing_meta_field</name><value>Skip_processing_after_recon</value></property>

        <property><name>partial_fourier_POCS_iters</name><value>6</value></property>
        <property><name>partial_fourier_POCS_thres</name><value>0.01</value></property>
        <property><name>partial_fourier_POCS_transitBand</name><value>24</value></property>
        <property><name>partial_fourier_POCS_transitBand_E2</name><value>16</value></property>
    </gadget>

    <!-- Kspace filtering -->
    <gadget>
        <name>KSpaceFilter</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconKSpaceFilteringGadget</classname>

        <!-- parameters for debug and timing -->
        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>false</value></property>
        <property><name>verbose</name><value>false</value></property>

        <!-- if incoming images have this meta field, it will not be processed -->
        <property><name>skip_processing_meta_field</name><value>Skip_processing_after_recon</value></property>

        <!-- parameters for kspace filtering -->
        <property><name>filterRO</name><value>Gaussian</value></property>
        <property><name>filterRO_sigma</name><value>1.5</value></property>
        <property><name>filterRO_width</name><value>0.15</value></property>

        <property><name>filterE1</name><value>Gaussian</value></property>
        <property><name>filterE1_sigma</name><value>1.5</value></property>
        <property><name>filterE1_width</name><value>0.15</value></property>

        <property><name>filterE2</name><value>Gaussian</value></property>
        <property><name>filterE2_sigma</name><value>1.5</value></property>
        <property><name>filterE2_width</name><value>0.15</value></property>
    </gadget>

    <!-- FOV Adjustment -->
    <gadget>
        <name>FOVAdjustment</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconFieldOfViewAdjustmentGadget</classname>

        <!-- parameters for debug and timing -->
        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>false</value></property>
        <property><name>verbose</name><value>false</value></property>
    </gadget>

    <!-- Image Array Scaling -->
    <gadget>
        <name>Scaling</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconImageArrayScalingGadget</classname>

        <!-- parameters for debug and timing -->
        <property><name>perform_timing</name><value>false</value></property>
        <property><name>verbose</name><value>false</value></property>

        <property><name>min_intensity_value</name><value>64</value></property>
        <property><name>max_intensity_value</name><value>4095</value></property>
        <property><name>scalingFactor</name><value>10.0</value></property>
        <property><name>use_constant_scalingFactor</name><value>true</value></property>
        <property><name>auto_scaling_only_once</name><value>true</value></property>
        <property><name>scalingFactor_dedicated</name><value>100.0</value></property>
    </gadget>

    <!-- T1 SASHA mapping -->
    <gadget>
        <name>SASHA</name>
        <dll>gadgetron_cmr</dll>
        <classname>CmrParametricT1SRMappingGadget</classname>

        <!-- parameters for debug and timing -->
        <property><name>perform_timing</name><value>true</value></property>
        <property><name>verbose</name><value>true</value></property>
        <property><name>debug_folder</name><value></value></property>

        <property><name>imaging_prep_time_from_protocol</name><value>true</value></property>

        <property><name>send_map</name><value>true</value></property>
        <property><name>send_sd_map</name><value>true</value></property>

        <property><name>color_lut_map</name><value>GadgetronT1_SR_1_5T.pal</value></property>
        <property><name>window_center_map</name><value>1300</value></property>
        <property><name>window_width_map</name><value>1300</value></property>

        <property><name>color_lut_map_3T</name><value>GadgetronT1_SR_3T.pal</value></property>
        <property><name>window_center_map_3T</name><value>1300</value></property>
        <property><name>window_width_map_3T</name><value>1300</value></property>

        <property><name>scaling_factor_map</name><value>1.0</value></property>

        <property><name>color_lut_sd_map</name><value>GadgetronT1_SD.pal</value></property>
        <property><name>window_center_sd_map</name><value>2.0</value></property>
        <property><name>window_width_sd_map</name><value>4.0</value></property>
        <property><name>scaling_factor_sd_map</name><value>100.0</value></property>

        <property><name>perform_hole_filling</name><value>true</value></property>
        <property><name>max_size_hole</name><value>20</value></property>

        <property><name>std_thres_masking</name><value>3.0</value></property>
        <property><name>mapping_with_masking</name><value>true</value></property>

        <property><name>max_iter</name><value>150</value></property>
        <property><name>thres_func</name><value>0.0001</value></property>
        <property><name>max_T1</name><value>4000.0</value></property>
    </gadget>

    <!-- ImageArray to images -->
    <gadget>
        <name>ImageArraySplit</name>
        <dll>gadgetron_mricore</dll>
        <classname>ImageArraySplitGadget</classname>
    </gadget>

    <!-- after recon processing -->
    <gadget>
        <name>ComplexToFloatAttrib</name>
        <dll>gadgetron_mricore</dll>
        <classname>ComplexToFloatGadget</classname>
    </gadget>

    <gadget>
        <name>FloatToShortAttrib</name>
        <dll>gadgetron_mricore</dll>
        <classname>FloatToUShortGadget</classname>

        <property><name>max_intensity</name><value>32767</value></property>
        <property><name>min_intensity</name><value>0</value></property>
        <property><name>intensity_offset</name><value>0</value></property>
    </gadget>

    <gadget>
        <name>ImageFinish</name>
        <dll>gadgetron_mricore</dll>
        <classname>ImageFinishGadget</classname>
    </gadget>

</gadgetronStreamConfiguration>
