<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
			      xmlns="http://gadgetron.sf.net/gadgetron"
			      xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">
  
  <reader>
    <slot>1008</slot>
    <dll>gadgetron_mricore</dll>
    <classname>GadgetIsmrmrdAcquisitionMessageReader</classname>
  </reader>
  
  <reader>
    <slot>1024</slot>
    <dll>gadgetron_compression</dll>
    <classname>GadgetIsmrmrdCompressedAcquisitionMessageReader</classname>
  </reader>
  
  <writer>
    <slot>1022</slot>
    <dll>gadgetron_mricore</dll>
    <classname>MRIImageWriter</classname>
  </writer>

  <gadget>
    <name>IsmrmrdDump</name>
    <dll>gadgetron_mricore</dll>
    <classname>IsmrmrdDumpGadget</classname>
    <property><name>file_prefix</name><value>ISMRMRD_DUMP</value></property>
    <property><name>append_timestamp</name><value>true</value></property>
  </gadget>

</gadgetronStreamConfiguration>
