<?xml version="1.0" encoding="UTF-8"?>
<configuration>
    <version>2</version>

    <readers>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>AcquisitionReader</classname>
        </reader>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>WaveformReader</classname>
        </reader>
    </readers>

    <writers>
        <writer>
            <dll>gadgetron_core_writers</dll>
            <classname>ImageWriter</classname>
        </writer>
    </writers>

    <stream>
        <gadget>
            <name>RemoveROOversampling</name>
            <dll>gadgetron_core_gadgets</dll>
            <classname>RemoveROOversamplingGadget</classname>
        </gadget>

        <gadget>
            <name>DummyGadget</name>
            <dll>gadgetron_core_gadgets</dll>
            <classname>DummyGadget</classname>
            <property name="foo" value="bar"/>
            <property name="baz" reference="foo@DummyGadget"/>
            <property name="cycle1" reference="cycle2@DummyGadget"/>
            <property>
                <name>cycle2</name>
                <value>cycle1@DummyGadget</value>
            </property>
        </gadget>

        <gadget>
            <name>AccTrig</name>
            <dll>gadgetron_core_gadgets</dll>
            <classname>AcquisitionAccumulateTriggerGadget</classname>
            <property>
                <name>trigger_dimension</name>
                <value>repetition</value>
            </property>
            <property>
                <name>sorting_dimension</name>
                <value>slice</value>
            </property>
        </gadget>

        <gadget>
            <name>Buff</name>
            <dll>gadgetron_core_gadgets</dll>
            <classname>BucketToBufferGadget</classname>
            <property>
                <name>N_dimension</name>
                <value></value>
            </property>
            <property>
                <name>S_dimension</name>
                <value></value>
            </property>
            <property>
                <name>split_slices</name>
                <value>true</value>
            </property>
        </gadget>

        <gadget>
            <name>SimpleRecon</name>
            <dll>gadgetron_core_gadgets</dll>
            <classname>SimpleReconGadget</classname>
        </gadget>

        <gadget>
            <name>ImageArraySplit</name>
            <dll>gadgetron_core_gadgets</dll>
            <classname>ImageArraySplitGadget</classname>
        </gadget>

        <gadget>
            <name>Extract</name>
            <dll>gadgetron_core_gadgets</dll>
            <classname>ExtractGadget</classname>
        </gadget>
    </stream>
</configuration>
