<?xml version="1.0" encoding="UTF-8"?>
<configuration>
    <version>2</version>
    <readers>
        <reader>
            <slot>1008</slot>
            <dll>gadgetron_mricore</dll>
            <classname>GadgetIsmrmrdAcquisitionMessageReader</classname>
        </reader>

        <reader>
            <slot>1022</slot>
            <dll>gadgetron_mricore</dll>
            <classname>MRIImageReader</classname>
        </reader>
    </readers>
    <writers>
        <writer>
            <slot>1022</slot>
            <dll>gadgetron_mricore</dll>
            <classname>MRIImageWriter</classname>
        </writer>

        <writer>
            <slot>1008</slot>
            <dll>gadgetron_mricore</dll>
            <classname>GadgetIsmrmrdAcquisitionMessageWriter</classname>
        </writer>
    </writers>

    <stream>
        <distributed>

            <readers>
                <reader>
                    <dll>gadgetron_mricore</dll>
                    <classname>MRIImageReader</classname>
                </reader>
                <reader>
                    <dll>gadgetron_mricore</dll>
                    <classname>GadgetIsmrmrdAcquisitionMessageReader</classname>
                </reader>
            </readers>
            <writers>
                <writer>
                    <dll>gadgetron_mricore</dll>
                    <classname>GadgetIsmrmrdAcquisitionMessageWriter</classname>
                </writer>
                <writer>
                    <dll>gadgetron_mricore</dll>
                    <classname>MRIImageWriter</classname>
                </writer>
            </writers>

            <branch>
                <name>Distribute</name>
                <dll>gadgetron_distributed</dll>
                <classname>IsmrmrdAcquisitionDistributeGadget</classname>
                <property name="parallel_dimension" value="repetition"/>
            </branch>


            <repeatedstream>
                <gadget>
                    <name>RemoveROOversampling</name>
                    <dll>gadgetron_mricore</dll>
                    <classname>RemoveROOversamplingGadget</classname>
                </gadget>

                <gadget>
                    <name>AccTrig</name>
                    <dll>gadgetron_mricore</dll>
                    <classname>AcquisitionAccumulateTriggerGadget</classname>
                    <property>
                        <name>trigger_dimension</name>
                        <value>repetition</value>
                    </property>
                    <property>
                        <name>sorting_dimension</name>
                        <value>slice</value>
                    </property>
                </gadget>

                <gadget>
                    <name>Buff</name>
                    <dll>gadgetron_mricore</dll>
                    <classname>BucketToBufferGadget</classname>
                    <property>
                        <name>N_dimension</name>
                        <value></value>
                    </property>
                    <property>
                        <name>S_dimension</name>
                        <value></value>
                    </property>
                    <property>
                        <name>split_slices</name>
                        <value>true</value>
                    </property>
                </gadget>

                <gadget>
                    <name>SimpleRecon</name>
                    <dll>gadgetron_mricore</dll>
                    <classname>SimpleReconGadget</classname>
                </gadget>

                <gadget>
                    <name>ImageArraySplit</name>
                    <dll>gadgetron_mricore</dll>
                    <classname>ImageArraySplitGadget</classname>
                </gadget>
            </repeatedstream>
            <merge>
                <name>Collect</name>
                <dll>gadgetron_distributed</dll>
                <classname>CollectGadget</classname>
            </merge>

        </distributed>


        <gadget>
            <name>Extract</name>
            <dll>gadgetron_mricore</dll>
            <classname>ExtractGadget</classname>
        </gadget>


        <!-- We are inserting an image sorter here so that the images always come out in the same order for integration test -->
        <gadget>
            <name>Sort</name>
            <dll>gadgetron_mricore</dll>
            <classname>ImageSortGadget</classname>
            <property>
                <name>sorting_dimension</name>
                <value>repetition</value>
            </property>
        </gadget>

    </stream>
</configuration>
