<?xml version="1.0" encoding="utf-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

    <!-- 
        GT Plus configuration file for general 2D epi reconstruction

        Author: Souheil Inati
        Email: souheil.inati@nih.gov
    -->

    <!-- reader -->
    <reader>
        <slot>1008</slot>
        <dll>gadgetron_mricore</dll>
        <classname>GadgetIsmrmrdAcquisitionMessageReader</classname>
    </reader>

    <!-- writer -->
    <writer>
        <slot>1004</slot>
        <dll>gadgetron_mricore</dll>
        <classname>MRIImageWriterCPLX</classname>
    </writer>
    <writer>
        <slot>1005</slot>
        <dll>gadgetron_mricore</dll>
        <classname>MRIImageWriterFLOAT</classname>
    </writer>
    <writer>
        <slot>1006</slot>
        <dll>gadgetron_mricore</dll>
        <classname>MRIImageWriterUSHORT</classname>
    </writer>

    <writer>
        <slot>1015</slot>
        <dll>gadgetron_mricore</dll>
        <classname>MRIImageAttribWriterCPLX</classname>
    </writer>
    <writer>
        <slot>1016</slot>
        <dll>gadgetron_mricore</dll>
        <classname>MRIImageAttribWriterFLOAT</classname>
    </writer>
    <writer>
        <slot>1017</slot>
        <dll>gadgetron_mricore</dll>
        <classname>MRIImageAttribWriterUSHORT</classname>
    </writer>

    <!-- Noise prewhitening -->
    <gadget>
        <name>NoiseAdjust</name>
        <dll>gadgetron_mricore</dll>
        <classname>NoiseAdjustGadget</classname>
    </gadget>

    <!-- Recon in X -->
    <gadget>
        <name>ReconX</name>
        <dll>gadgetron_epi</dll>
        <classname>EPIReconXGadget</classname>
    </gadget>

    <!-- EPI Corr -->
    <gadget>
        <name>EPICorr</name>
        <dll>gadgetron_epi</dll>
        <classname>EPICorrGadget</classname>
    </gadget>

    <!-- FFT in X back to k -->
    <gadget>
        <name>FFTX</name>
        <dll>gadgetron_epi</dll>
        <classname>FFTXGadget</classname>
    </gadget>


    <gadget>
      <name>IsmrmrdDump</name>
      <dll>gadgetron_mricore</dll>
      <classname>IsmrmrdDumpGadget</classname>
      <property><name>file_prefix</name><value>ISMRMRD_DUMP</value></property>
      <property><name>append_timestamp</name><value>1</value></property>
    </gadget>


    <!-- Data accumulation and trigger gadget -->
    <gadget>
        <name>Acc</name>
        <dll>gadgetronPlus</dll>
        <classname>GtPlusAccumulatorWorkOrderTriggerGadget</classname>

        <!-- debug and info mode -->
        <property>
            <name>verboseMode</name>
            <value>true</value>
        </property>

        <!-- No acceleration mode -->
        <property>
            <name>noacceleration_triggerDim1</name>
            <value>DIM_Repetition</value>
        </property>

        <property>
            <name>noacceleration_triggerDim2</name>
            <value>DIM_NONE</value>
        </property>

        <property>
            <name>noacceleration_numOfKSpace_triggerDim1</name>
            <value>1</value>
        </property>

        <!-- Separate mode -->
        <property>
            <name>separate_triggerDim1</name>
            <value>DIM_Repetition</value>
        </property>

        <property>
            <name>separate_triggerDim2</name>
            <value>DIM_NONE</value>
        </property>

        <property>
            <name>separate_numOfKSpace_triggerDim1</name>
            <value>1</value>
        </property>

        <!-- if 'other' kspace data presents, enforce its dimension matches the image data-->
        <property>
            <name>other_kspace_matching_Dim</name>
            <value>DIM_Repetition</value>
        </property>

    </gadget>

    <!--Recon computation for 2DT cases -->
    <gadget>
        <name>Recon</name>
        <dll>gadgetronPlus</dll>
        <classname>GtPlusRecon2DTGadget</classname>

        <!-- kspace data -->
        <property>
            <name>dim_4th</name>
            <value>DIM_Contrast</value>
        </property>
        <property>
            <name>dim_5th</name>
            <value>DIM_Slice</value>
        </property>

        <!-- work flow -->
        <property>
            <name>workOrder_ShareDim</name>
            <value>DIM_Repetition</value>
        </property>

        <!-- No acceleration mode -->
        <property>
            <name>no_acceleration_averageall_ref</name>
            <value>true</value>
        </property>
        <property>
            <name>no_acceleration_ref_numOfModes</name>
            <value>0</value>
        </property>
        <property>
            <name>no_acceleration_same_combinationcoeff_allS</name>
            <value>false</value>
        </property>
        <property>
            <name>no_acceleration_whichS_combinationcoeff</name>
            <value>0</value>
        </property>

        <!-- Separate mode -->
        <property>
            <name>separate_averageall_ref</name>
            <value>true</value>
        </property>
        <property>
            <name>separate_ref_numOfModes</name>
            <value>0</value>
        </property>
        <property>
            <name>separate_fullres_coilmap</name>
            <value>false</value>
        </property>
        <property>
            <name>separate_same_combinationcoeff_allS</name>
            <value>false</value>
        </property>
        <property>
            <name>separate_whichS_combinationcoeff</name>
            <value>0</value>
        </property>

        <!-- coil compression -->
        <property>
            <name>same_coil_compression_coeff_allS</name>
            <value>true</value>
        </property>

        <property>
            <name>downstream_coil_compression</name>
            <value>false</value>
        </property>

        <property>
            <name>coil_compression_thres</name>
            <value>-1</value>
        </property>

        <property>
            <name>coil_compression_num_modesKept</name>
            <value>-1</value>
        </property>

        <!-- parameters for coil map estimation 
            enum ISMRMRDCOILMAPALGO
            {
                ISMRMRD_SOUHEIL,
                ISMRMRD_SOUHEIL_ITER
            };
        -->
        <property>
            <name>coil_map_algorithm</name>
            <value>ISMRMRD_SOUHEIL</value>
        </property>
        <property>
            <name>csm_kSize</name>
            <value>7</value>
        </property>

        <property>
            <name>csm_powermethod_num</name>
            <value>3</value>
        </property>

        <property>
            <name>csm_true_3D</name>
            <value>false</value>
        </property>

        <property>
            <name>csm_iter_num</name>
            <value>5</value>
        </property>

        <property>
            <name>csm_iter_thres</name>
            <value>0.001</value>
        </property>

        <property>
            <name>csm_use_gpu</name>
            <value>false</value>
        </property>

        <!-- algorithm -->
        <property>
            <name>recon_algorithm</name>
            <value>ISMRMRD_GRAPPA</value>
        </property>

        <property>
            <name>recon_kspace_needed</name>
            <value>false</value>
        </property>

        <property>
            <name>recon_auto_parameters</name>
            <value>true</value>
        </property>

        <!-- parameters for ISMRMRD_GRAPPA -->
        <property>
            <name>grappa_kSize_RO</name>
            <value>5</value>
        </property>
        <property>
            <name>grappa_kSize_E1</name>
            <value>4</value>
        </property>
        <property>
            <name>grappa_kSize_E2</name>
            <value>4</value>
        </property>
        <property>
            <name>grappa_reg_lamda</name>
            <value>0.0005</value>
        </property>
        <property>
            <name>grappa_calib_over_determine_ratio</name>
            <value>0</value>
        </property>
        <property>
            <name>grappa_use_gpu</name>
            <value>false</value>
        </property>

        <!-- parameters for scaling and image sending -->
        <property>
            <name>min_intensity_value</name>
            <value>64</value>
        </property>

        <property>
            <name>max_intensity_value</name>
            <value>4095</value>
        </property>

        <property>
            <name>scalingFactor</name>
            <value>-1.0</value>
        </property>

        <property>
            <name>use_constant_scalingFactor</name>
            <value>true</value>
        </property>

        <!-- parameters for kspace filter, image data -->
        <property>
            <name>filterRO</name>
            <value>ISMRMRD_FILTER_GAUSSIAN</value>
        </property>
        <property>
            <name>filterRO_sigma</name>
            <value>1.0</value>
        </property>
        <property>
            <name>filterRO_width</name>
            <value>0.15</value>
        </property>

        <property>
            <name>filterE1</name>
            <value>ISMRMRD_FILTER_GAUSSIAN</value>
        </property>
        <property>
            <name>filterE1_sigma</name>
            <value>1.0</value>
        </property>
        <property>
            <name>filterE1_width</name>
            <value>0.15</value>
        </property>

        <property>
            <name>filterE2</name>
            <value>ISMRMRD_FILTER_GAUSSIAN</value>
        </property>
        <property>
            <name>filterE2_sigma</name>
            <value>1.0</value>
        </property>
        <property>
            <name>filterE2_width</name>
            <value>0.15</value>
        </property>

        <!-- parameters for kspace filter, ref data -->
        <property>
            <name>filterRefRO</name>
            <value>ISMRMRD_FILTER_HANNING</value>
        </property>
        <property>
            <name>filterRefRO_sigma</name>
            <value>1.5</value>
        </property>
        <property>
            <name>filterRefRO_width</name>
            <value>0.15</value>
        </property>

        <property>
            <name>filterRefE1</name>
            <value>ISMRMRD_FILTER_HANNING</value>
        </property>
        <property>
            <name>filterRefE1_sigma</name>
            <value>1.5</value>
        </property>
        <property>
            <name>filterRefE1_width</name>
            <value>0.15</value>
        </property>

        <property>
            <name>filterRefE2</name>
            <value>ISMRMRD_FILTER_HANNING</value>
        </property>
        <property>
            <name>filterRefE2_sigma</name>
            <value>1.5</value>
        </property>
        <property>
            <name>filterRefE2_width</name>
            <value>0.15</value>
        </property>

        <!-- parameters for debug and timing -->
        <property>
            <name>debugFolder</name>
            <value>DebugOutput</value>
        </property>

        <property>
            <name>debugFolder2</name>
            <value>DebugOutput</value>
        </property>

        <property>
            <name>cloudNodeFile</name>
            <value>myCloud_2DT.txt</value>
        </property>

        <property>
            <name>performTiming</name>
            <value>true</value>
        </property>

        <property>
            <name>verboseMode</name>
            <value>false</value>
        </property>

        <!-- parameters for system acquisition -->
        <property>
            <name>timeStampResolution</name>
            <value>0.0025</value>
        </property>

        <!-- parameters for recon job split -->
        <property>
            <name>job_split_by_S</name>
            <value>false</value>
        </property>
        <property>
            <name>job_num_of_N</name>
            <value>32</value>
        </property>
        <property>
            <name>job_max_Megabytes</name>
            <value>10240</value>
        </property>
        <property>
            <name>job_overlap</name>
            <value>2</value>
        </property>
        <property>
            <name>job_perform_on_control_node</name>
            <value>true</value>
        </property>

        <!-- parameters for the cloud computation 
             The cloud should be defined as the following: CloudNodeX_IP/Port/XMLConfiguration etc.
        -->
        <property>
            <name>CloudComputing</name>
            <value>false</value>
        </property>

        <property>
            <name>CloudSize</name>
            <value>1</value>
        </property>

        <!-- node 0 -->
        <property>
            <name>CloudNode0_IP</name>
            <value>localhost</value>
        </property>

        <property>
            <name>CloudNode0_Port</name>
            <value>9003</value>
        </property>

        <property>
            <name>CloudNode0_XMLConfiguration</name>
            <value>GadgetronProgram_gtPlus_2DT_Cartesian_CloudNode.xml</value>
        </property>

        <property>
            <name>CloudNode0_ComputingPowerIndex</name>
            <value>1</value>
        </property>

    </gadget>

    <!-- after recon processing -->
    <!--
    <gadget>
        <name>ComplexToFloatAttrib</name>
        <dll>gadgetron_mricore</dll>
        <classname>ComplexToFloatAttribGadget</classname>
    </gadget>

    <gadget>
        <name>FloatToShortAttrib</name>
        <dll>gadgetron_mricore</dll>
        <classname>FloatToUShortAttribGadget</classname>

        <property>
            <name>max_intensity</name>
            <value>32767</value>
        </property>

        <property>
            <name>intensity_offset</name>
            <value>16384</value>
        </property>
    </gadget>
    -->

    <gadget>
        <name>ImageFinishAttribCPLX</name>
        <dll>gadgetron_mricore</dll>
        <classname>ImageFinishAttribGadgetCPLX</classname>
    </gadget>

    <!--
    <gadget>
      <name>ImageFinishAttribFLOAT</name>
      <dll>gadgetron_mricore</dll>
      <classname>ImageFinishAttribGadgetFLOAT</classname>
    </gadget>


    <gadget>
        <name>DicomFinishAttribGadget</name>
        <dll>gadgetron_dicom</dll>
        <classname>DicomFinishAttribGadgetUSHORT</classname>
    </gadget>
    -->

</gadgetronStreamConfiguration>
