<?xml version="1.0" encoding="UTF-8"?>
<configuration>
    <version>2</version>

    <readers>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>AcquisitionReader</classname>
        </reader>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>WaveformReader</classname>
        </reader>
    </readers>

    <writers>
        <writer>
            <dll>gadgetron_core_writers</dll>
            <classname>ImageWriter</classname>
        </writer>
    </writers>

    <stream>
        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>NoiseAdjustGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>RemoveROOversamplingGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>AcquisitionAccumulateTriggerGadget</classname>
            <property name="trigger_dimension" value="repetition"/>
        </gadget>

        <external>
            <!-- We're referencing a function called bucket_recon in the gadgetron.recon package.
                 It's installed with the Gadgetron MATLAB package, and used there as an example. -->
            <execute name="gadgetron.examples.bucket_recon" type="matlab"/>
            <configuration/>
        </external>
    </stream>
</configuration>
