<?xml version="1.0" encoding="UTF-8"?>
<configuration>
    <version>2</version>

    <readers>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>AcquisitionReader</classname>
        </reader>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>WaveformReader</classname>
        </reader>
    </readers>

    <writers>
        <writer>
            <dll>gadgetron_core_writers</dll>
            <classname>ImageWriter</classname>
        </writer>
    </writers>

    <stream>
        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>NoiseAdjustGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>RemoveROOversamplingGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>AcquisitionAccumulateTriggerGadget</classname>
            <property name="trigger_dimension" value="repetition"/>
        </gadget>

        <external>
<!--            <execute name="simple_bucket_recon" type="python"/>-->
            <connect port="9100"/>
            <configuration/>
        </external>
    </stream>
</configuration>
