<?xml version="1.0" encoding="UTF-8"?>
<configuration>
    <version>2</version>

    <readers>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>AcquisitionReader</classname>
        </reader>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>WaveformReader</classname>
        </reader>
    </readers>

    <writers>
        <writer>
            <dll>gadgetron_core_writers</dll>
            <classname>ImageWriter</classname>
        </writer>
    </writers>

    <stream>
        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>NoiseAdjustGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>RemoveROOversamplingGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>AcquisitionAccumulateTriggerGadget</classname>
            <property name="trigger_dimension" value="repetition"/>
            <property name="sorting_dimension" value="slice"/>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>BucketToBufferGadget</classname>
            <property name="split_slices" value="true"/>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>SimpleReconGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>ImageArraySplitGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>ExtractGadget</classname>
        </gadget>

        <parallel>
            <!-- Using an empty parallel branch to bypass one or more gadgets is common.
                 This example illustrates how to achieve this. -->

           <branch>
               <dll>gadgetron_core_parallel</dll>
               <classname>ImageFanout</classname>
            </branch>

            <stream key="unchanged"/>
            <stream key="inverted">
                <gadget>
                    <dll>gadgetron_examples</dll>
                    <classname>ImageInverter</classname>
                </gadget>
            </stream>

            <merge>
                <dll>gadgetron_examples</dll>
                <classname>ImageLayerer</classname>
            </merge>
        </parallel>
    </stream>
</configuration>
