<?xml version="1.0" encoding="UTF-8"?>
<configuration>
    <version>2</version>

    <readers>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>AcquisitionReader</classname>
        </reader>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>WaveformReader</classname>
        </reader>
    </readers>

    <writers>
        <writer>
            <dll>gadgetron_core_writers</dll>
            <classname>ImageWriter</classname>
        </writer>
    </writers>

    <stream>
        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>NoiseAdjustGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>PCACoilGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>CoilReductionGadget</classname>
            <property>
                <name>coils_out</name>
                <value>16</value>
            </property>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>AsymmetricEchoAdjustROGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>RemoveROOversamplingGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_grappa_new</dll>
            <classname>ChannelReorderer</classname>
            <!--<property name="uncombined_channels" value="8, 9, 10, 11, 12, 13, 14, 15"/>-->
        </gadget>

        <gadget>
            <dll>gadgetron_grappa_new</dll>
            <classname>SliceAccumulator</classname>
        </gadget>

        <parallel>
            <branch>
                <dll>gadgetron_grappa_new</dll>
                <classname>AcquisitionFanout</classname>
            </branch>

            <stream key="images">
                <gadget>
                    <dll>gadgetron_grappa_new</dll>
                    <classname>ImageAccumulator</classname>
                </gadget>
            </stream>

            <stream key="weights">
                <gadget>
                    <dll>gadgetron_grappa_new</dll>
                    <classname>WeightsCalculator</classname>
                </gadget>
            </stream>

            <merge>
                <dll>gadgetron_grappa_new</dll>
                <classname>Unmixing</classname>
            </merge>
        </parallel>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>ExtractGadget</classname>
        </gadget>

        <!--<gadget>-->
            <!--<dll>gadgetron_mricore</dll>-->
            <!--<classname>AutoScaleGadget</classname>-->
        <!--</gadget>-->

        <!--<gadget>-->
            <!--<dll>gadgetron_mricore</dll>-->
            <!--<classname>FloatToUShortGadget</classname>-->
        <!--</gadget>-->
    </stream>
</configuration>