<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">
        
    <reader>
      <slot>1008</slot>
      <dll>gadgetron_mricore</dll>
      <classname>GadgetIsmrmrdAcquisitionMessageReader</classname>
    </reader>
    <reader>
        <slot>1026</slot>
        <dll>gadgetron_mricore</dll>
        <classname>GadgetIsmrmrdWaveformMessageReader</classname>
    </reader>

    <writer>
      <slot>1022</slot>
      <dll>gadgetron_mricore</dll>
      <classname>MRIImageWriter</classname>
    </writer>
    <writer>
      <slot>1005</slot>
      <dll>gadgetron_mricore</dll>
      <classname>MRIImageWriterFLOAT</classname>
    </writer>
    <writer>
      <slot>1006</slot>
      <dll>gadgetron_mricore</dll>
      <classname>MRIImageWriterUSHORT</classname>
    </writer>
    <gadget>
      <name>CMRT</name>
      <dll>gadgetron_hyper</dll>
      <classname>CMRTGadget</classname>
      <property><name>projections_per_recon</name><value>128</value></property>
      <property><name>golden_ratio</name><value>true</value></property>
    </gadget>

    <gadget>
      <name>Extract</name>
      <dll>gadgetron_mricore</dll>
      <classname>ExtractGadget</classname>
    </gadget>  

    <gadget>
      <name>ImageFinish</name>
      <dll>gadgetron_mricore</dll>
      <classname>ImageFinishGadget</classname>
    </gadget>

</gadgetronStreamConfiguration>
