<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
			      xmlns="http://gadgetron.sf.net/gadgetron"
			      xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">
  
  <reader>
    <slot>1008</slot>
    <dll>gadgetron_mricore</dll>
    <classname>GadgetIsmrmrdAcquisitionMessageReader</classname>
  </reader>
    <reader>
        <slot>1026</slot>
        <dll>gadgetron_mricore</dll>
        <classname>GadgetIsmrmrdWaveformMessageReader</classname>
    </reader>

 <writer>
      <slot>1022</slot>
      <dll>gadgetron_mricore</dll>
      <classname>MRIImageWriter</classname>
    </writer>
 
  <gadget>
    <name>NoiseAdjust</name>
    <dll>gadgetron_mricore</dll>
    <classname>NoiseAdjustGadget</classname>
  </gadget>
  
  <gadget>
    <name>PCA</name>
    <dll>gadgetron_mricore</dll>
    <classname>PCACoilGadget</classname>
  </gadget>
  
  <gadget>
    <name>CoilReduction</name>
    <dll>gadgetron_mricore</dll>
    <classname>CoilReductionGadget</classname>
    <property><name>coils_out</name><value>12</value></property>
  </gadget>

<gadget>
	<name>AccumulatorGadget</name>
	<dll>gadgetron_mricore</dll>
	<classname>AcquisitionAccumulateTriggerGadget</classname>
	<property><name>trigger_dimension</name><value>repetition</value></property>
</gadget>
	
<gadget>
	<name>BucketToBufferGadget</name>
	<dll>gadgetron_mricore</dll>
	<classname>BucketToBufferGadget</classname>
</gadget>
  <gadget>
    <name>CoilEstimation</name>
    <dll>gadgetron_hyper</dll>
    <classname>gpuCSICoilEstimationGadget</classname>
      <property><name>kernel_width</name><value>5.5</value></property>
      <property><name>skip_lines</name><value>1</value></property>
  </gadget>
  
  <gadget>
    <name>CSIGadget</name>
    <dll>gadgetron_hyper</dll>
    <classname>CSIGadget</classname>
    <!--property><name>frequency_min</name><value>-600</value></property>
    <property><name>frequency_max</name><value>160</value></property>
    <property><name>frequency_step</name><value>10</value></property-->
    <property><name>frequencies</name><value>-575.1223 -450.1223 -360.1223 -183.1223 140.8777 </value></property>
    <property><name>pass_on_undesired_data</name>  <value>true</value></property>
    <property><name>deviceno</name>                <value>0</value></property>
    <property><name>number_of_cg_iterations</name>    <value>10</value></property>
    <property><name>number_of_sb_iterations</name>    <value>50</value></property>
    <property><name>cg_limit</name>                <value>1e-8</value></property>
    <property><name>oversampling_factor</name>     <value>2</value></property>
    <property><name>kernel_width</name>            <value>7.5</value></property>
    <property><name>mu</name>                   <value>0.2</value></property>
    <property><name>output_convergence</name><value>true</value></property>
  </gadget>

  <gadget>
    <name>Extract</name>
    <dll>gadgetron_mricore</dll>
    <classname>ExtractGadget</classname>
  </gadget>
 <gadget>
    <name>AutoScaleGadget</name>
    <dll>gadgetron_mricore</dll>
    <classname>AutoScaleGadget</classname>
     <property>
         <name>max_value</name>
<!--         <value>499.7415424</value>-->
         <value>512</value>
     </property>
<!--    <property><name>max_value</name><value>499.74</value></property>-->
  </gadget>


  <gadget>
<name>ImageFinish</name>
<dll>gadgetron_mricore</dll>
<classname>ImageFinishGadget</classname>
</gadget>
</gadgetronStreamConfiguration>
