<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">
         
    <reader>
      <slot>1008</slot>
      <dll>gadgetron_mricore</dll>
      <classname>GadgetIsmrmrdAcquisitionMessageReader</classname>
    </reader>
 
     <writer>
      <slot>1004</slot>
      <dll>gadgetron_mricore</dll>
      <classname>MRIImageWriterCPLX</classname>
    </writer>
    <writer>
      <slot>1005</slot>
      <dll>gadgetron_mricore</dll>
      <classname>MRIImageWriterFLOAT</classname>
    </writer>
    <writer>
      <slot>1006</slot>
      <dll>gadgetron_mricore</dll>
      <classname>MRIImageWriterUSHORT</classname>
    </writer>

    <writer>
        <slot>1015</slot>
        <dll>gadgetron_mricore</dll>
        <classname>MRIImageAttribWriterCPLX</classname>
    </writer>
    <writer>
        <slot>1016</slot>
        <dll>gadgetron_mricore</dll>
        <classname>MRIImageAttribWriterFLOAT</classname>
    </writer>
    <writer>
        <slot>1017</slot>
        <dll>gadgetron_mricore</dll>
        <classname>MRIImageAttribWriterUSHORT</classname>
    </writer>

    <!-- We need to modify the coil adjust to that we only scale channels according to noise variance -->
    <!--
    <gadget>
      <name>NoiseAdjust</name>
      <dll>gadgetron_mricore</dll>
      <classname>NoiseAdjustGadget</classname>
      <property><name>scale_only</name><value>present_uncombined_channels@PCA</value></property>
    </gadget>    
    -->

    <gadget>
      <name>PCA</name>
      <dll>gadgetron_mricore</dll>
      <classname>PCACoilGadget</classname>
      <property><name>uncombined_channels_by_name</name><value>Loop_7:L7</value></property>

      <!-- present_uncombined_channels will get updated by the gadget based on the attached coils -->
      <property><name>present_uncombined_channels</name><value>0</value></property>
    </gadget>

    <gadget>
      <name>CoilReduction</name>
      <dll>gadgetron_mricore</dll>
      <classname>CoilReductionGadget</classname>
      <property><name>coils_out</name><value>16</value></property>
    </gadget>

    <gadget>
      <name>RemoveROOversampling</name>
      <dll>gadgetron_mricore</dll>
      <classname>RemoveROOversamplingGadget</classname>
    </gadget>

    <gadget>
      <name>Grappa</name>
      <dll>gadgetron_grappa</dll>
      <classname>GrappaGadget</classname>
      <!-- After PCA gadget, the device channel with be the first channel -->
      <!--
      <property><name>uncombined_channels</name><value>0</value></property>
      -->
      <property><name>device_channels</name><value>present_uncombined_channels@PCA</value></property>
    </gadget>

    <gadget>
      <name>GrappaUnmixing</name>
      <dll>gadgetron_grappa</dll>
      <classname>GrappaUnmixingGadget</classname>
    </gadget>

     <gadget>
      <name>Extract</name>
      <dll>gadgetron_mricore</dll>
      <classname>ExtractGadget</classname>
    </gadget>

    <!--
    <gadget>
      <name>ImageWrite</name>
      <dll>gadgetron_mricore</dll>
      <classname>ImageWriterGadgetFLOAT</classname>
    </gadget>
    -->

    <gadget>
      <name>AutoScale</name>
      <dll>gadgetron_mricore</dll>
      <classname>AutoScaleGadget</classname>
    </gadget>
    
    <gadget>
      <name>FloatToShort</name>
      <dll>gadgetron_mricore</dll>
      <classname>FloatToUShortGadget</classname>
    </gadget>
    
    <!--
    <gadget>
      <name>ImageFinishCPLX</name>
      <dll>gadgetron_mricore</dll>
      <classname>ImageFinishGadgetCPLX</classname>
    </gadget>
    -->

    <!--
    <gadget>
      <name>ImageFinishFLOAT</name>
      <dll>gadgetron_mricore</dll>
      <classname>ImageFinishGadgetFLOAT</classname>
    </gadget>
 -->

    <gadget>
      <name>DeviceChannelSplitter</name>
      <dll>gadgetron_interventional_mri</dll>
      <classname>DeviceChannelSplitterGadgetUSHORT</classname>
    </gadget>>

     <gadget>
      <name>ImageFinishAttribUSHORT</name>
      <dll>gadgetron_mricore</dll>
      <classname>ImageFinishAttribGadgetUSHORT</classname>
    </gadget>
</gadgetronStreamConfiguration>
