<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
                  xmlns="http://gadgetron.sf.net/gadgetron"
                  xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

    <reader>
        <slot>1008</slot>
        <dll>gadgetron_mricore</dll>
        <classname>GadgetIsmrmrdAcquisitionMessageReader</classname>
    </reader>

    <!-- store the incoming noise data -->
    <gadget>
        <name>IsmrmrdDump</name>
        <dll>gadgetronPrep</dll>
        <classname>GtPrepKSpaceDataDumpGadget</classname>
        <property><name>file_prefix</name><value></value></property>
        <property><name>folder</name><value>/tmp/gadgetron_data</value></property>
    </gadget>

</gadgetronStreamConfiguration>
