<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
                  xmlns="http://gadgetron.sf.net/gadgetron"
                  xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

    <reader>
        <slot>1008</slot>
        <dll>gadgetron_mricore</dll>
        <classname>GadgetIsmrmrdAcquisitionMessageReader</classname>
    </reader>
    <reader>
        <slot>1026</slot>
        <dll>gadgetron_mricore</dll>
        <classname>GadgetIsmrmrdWaveformMessageReader</classname>
    </reader>

    <!-- SNR unit noise adjust gadget 
         If the scan has asymmetric readout, the center of echo will shifted to the index 0
         Zeros will be filled into the readout data
    -->
    <gadget>
        <name>NoiseAdjust</name>
        <dll>gadgetron_mricore</dll>
        <classname>NoiseAdjustGadget</classname>

        <!-- File prefix for stored noise prewhitener matrix -->
        <property><name>noise_dependency_prefix</name><value>GadgetronNoiseCovarianceMatrix</value></property>

        <!-- Whether to pass the nonconformant data without applyting the prewhitening -->
        <property><name>pass_nonconformant_data</name><value>true</value></property>
    </gadget>

    <!-- Data sender -->
    <gadget>
        <name>DataSender</name>
        <dll>gadgetron_mricore</dll>
        <classname>DependencyDataSenderGadget</classname>
        <property><name>coil_sen_head_gadget</name><value>AccCoilSen</value></property>
        <property><name>scc_head_gadget</name><value>AccSCC</value></property>
    </gadget>

    <!-- Head of coil sen branch -->
    <gadget>
        <name>AccCoilSen</name>
        <dll>gadgetron_mricore</dll>
        <classname>AcquisitionAccumulateTriggerGadget</classname>
        <property><name>trigger_dimension</name><value></value></property>
        <property><name>sorting_dimension</name><value></value></property>
    </gadget>

    <gadget>
        <name>CoilSen</name>
        <dll>gadgetron_mricore</dll>
        <classname>CoilSenMapGadget</classname>

        <property><name>coil_sen_dependency_prefix</name><value>GadgetronCoilSenMap</value></property>
        <property><name>pass_nonconformant_data</name><value>false</value></property>

        <property><name>verbose</name><value>true</value></property>
        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>false</value></property>
    </gadget>

    <!-- Head of SCC branch -->
    <gadget>
        <name>AccSCC</name>
        <dll>gadgetron_mricore</dll>
        <classname>AcquisitionAccumulateTriggerGadget</classname>
        <property><name>trigger_dimension</name><value></value></property>
        <property><name>sorting_dimension</name><value></value></property>
    </gadget>

    <gadget>
        <name>SCC</name>
        <dll>gadgetron_mricore</dll>
        <classname>CoilSenMapGadget</classname>

        <property><name>coil_sen_dependency_prefix</name><value>GadgetronSCCMap</value></property>
        <property><name>pass_nonconformant_data</name><value>false</value></property>

        <property><name>verbose</name><value>true</value></property>
        <property><name>debug_folder</name><value></value></property>
        <property><name>perform_timing</name><value>false</value></property>
    </gadget>

</gadgetronStreamConfiguration>
