<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
                  xmlns="http://gadgetron.sf.net/gadgetron"
                  xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

    <reader>
        <slot>1008</slot>
        <dll>gadgetron_mricore</dll>
        <classname>GadgetIsmrmrdAcquisitionMessageReader</classname>
    </reader>

    <!-- store the incoming noise data -->
    <gadget>
        <name>IsmrmrdDump</name>
        <dll>gadgetron_mricore</dll>
        <classname>IsmrmrdDumpGadget</classname>
        <property><name>file_prefix</name><value>ISMRMRD_Noise_dependency</value></property>
        <property><name>folder</name><value>/tmp/gadgetron_data</value></property>
        <property><name>append_id</name><value>true</value></property>
        <property><name>append_timestamp</name><value>true</value></property>
        <property><name>use_data_timestamp</name><value>true</value></property>
    </gadget>

    <!-- SNR unit noise adjust gadget -->
    <gadget>
        <name>NoiseAdjust</name>
        <dll>gadgetron_mricore</dll>
        <classname>NoiseAdjustGadget</classname>

        <!-- File prefix for stored noise prewhitener matrix -->
        <property><name>noise_dependency_prefix</name><value>GadgetronNoiseCovarianceMatrix</value></property>

        <!-- Whether to pass the nonconformant data without applyting the prewhitening -->
        <property><name>pass_nonconformant_data</name><value>true</value></property>
    </gadget>

</gadgetronStreamConfiguration>
