<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
			      xmlns="http://gadgetron.sf.net/gadgetron"
			      xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

    <reader>
        <slot>1008</slot>
        <dll>gadgetron_mricore</dll>
        <classname>GadgetIsmrmrdAcquisitionMessageReader</classname>
    </reader>
    <reader>
        <slot>1026</slot>
        <dll>gadgetron_mricore</dll>
        <classname>GadgetIsmrmrdWaveformMessageReader</classname>
    </reader>

  <writer>
    <slot>1022</slot>
    <dll>gadgetron_mricore</dll>
    <classname>MRIImageWriter</classname>
  </writer>

  <gadget>
    <name>NoiseAdjust</name>
    <dll>gadgetron_mricore</dll>
    <classname>NoiseAdjustGadget</classname>
  </gadget>
  
  <gadget>
    <name>PCA</name>
    <dll>gadgetron_mricore</dll>
    <classname>PCACoilGadget</classname>
  </gadget>
  
  <gadget>
    <name>CoilReduction</name>
    <dll>gadgetron_mricore</dll>
    <classname>CoilReductionGadget</classname>
    <property><name>coils_out</name><value>16</value></property>
  </gadget>
  
  <gadget>
    <name>RemoveROOversampling</name>
    <dll>gadgetron_mricore</dll>
    <classname>RemoveROOversamplingGadget</classname>
  </gadget>

    <gadget>
        <name>AccTrig</name>
        <dll>gadgetron_mricore</dll>
        <classname>AcquisitionAccumulateTriggerGadget</classname>
        <property>
            <name>trigger_dimension</name>
            <value>repetition</value>
        </property>
        <property>
          <name>sorting_dimension</name>
          <value>slice</value>
        </property>
    </gadget>

    <gadget>
        <name>Buff</name>
        <dll>gadgetron_mricore</dll>
        <classname>BucketToBufferGadget</classname>
        <property>
            <name>N_dimension</name>
            <value></value>
        </property>
        <property>
          <name>S_dimension</name>
          <value></value>
        </property>
        <property>
          <name>split_slices</name>
          <value>true</value>
        </property>
    </gadget>
	<gadget>
		<name>PseudoReplicatorGadget</name>
		<dll>gadgetron_mricore</dll>
		<classname>PseudoReplicatorGadget</classname>
		<property>
			<name>repetitions</name>
			<value>100</value>
		</property>
	</gadget>

     <gadget>
      <name>SimpleRecon</name>
      <dll>gadgetron_mricore</dll>
      <classname>SimpleReconGadget</classname>
     </gadget>
      <gadget>
      <name>ImageArraySplit</name>
      <dll>gadgetron_mricore</dll>
      <classname>ImageArraySplitGadget</classname>
     </gadget>
     
	 <gadget>
		 <name>PseudoReplicaGatherPython</name>
      <dll>gadgetron_python</dll>
      <classname>PythonGadget</classname>
      <property><name>python_module</name>                <value>pseudoreplicagather</value></property>
      <property><name>python_class</name>                <value>PseudoreplicaGather</value></property>
 	<property>
			<name>repetitions</name>
			<value>100</value>
		</property>
	</gadget>
  <!--
      <gadget>
      <name>ImageWrite</name>
      <dll>gadgetron_mricore</dll>
      <classname>ImageWriterGadgetCPLX</classname>
      </gadget>
  -->
  

  <!--
      <gadget>
      <name>ImageWrite</name>
      <dll>gadgetron_mricore</dll>
      <classname>ImageWriterGadgetFLOAT</classname>
      </gadget>
  -->
  
  <!--
      <gadget>
      <name>FloatToShort</name>
      <dll>gadgetron_mricore</dll>
      <classname>FloatToUShortGadget</classname>
      </gadget>
  -->

  <gadget>
    <name>ImageFinish</name>
    <dll>gadgetron_mricore</dll>
    <classname>ImageFinishGadget</classname>
  </gadget>

</gadgetronStreamConfiguration>
