<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
			      xmlns="http://gadgetron.sf.net/gadgetron"
			      xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

    <reader>
        <slot>1008</slot>
        <dll>gadgetron_mricore</dll>
        <classname>GadgetIsmrmrdAcquisitionMessageReader</classname>
    </reader>
    <reader>
        <slot>1026</slot>
        <dll>gadgetron_mricore</dll>
        <classname>GadgetIsmrmrdWaveformMessageReader</classname>
    </reader>
  
    <writer>
      <slot>1022</slot>
      <dll>gadgetron_mricore</dll>
      <classname>MRIImageWriter</classname>
    </writer>

   <gadget>
    <name>NoiseAdjust</name>
    <dll>gadgetron_mricore</dll>
    <classname>NoiseAdjustGadget</classname>
  </gadget>

  <gadget>
    <name>PCA</name>
    <dll>gadgetron_mricore</dll>
    <classname>PCACoilGadget</classname>
  </gadget>
  
  <gadget>
    <name>CoilReduction</name>
    <dll>gadgetron_mricore</dll>
    <classname>CoilReductionGadget</classname>
    <property><name>coils_out</name><value>12</value></property>
  </gadget>

<gadget>
	<name>AccumulatorGadget</name>
	<dll>gadgetron_mricore</dll>
	<classname>AcquisitionAccumulateTriggerGadget</classname>
</gadget>
	
    <gadget>
        <name>Buff</name>
        <dll>gadgetron_mricore</dll>
	<classname>BucketToBufferGadget</classname>
        <property>
            <name>N_dimension</name>
            <value>repetition</value>
        </property>
        <property>
          <name>S_dimension</name>
          <value></value>
        </property>
        <property>
		  <name>split_slices</name>
          <value>false</value>
        </property>
    </gadget>

    <gadget>
      <name>IdealPython</name>
      <dll>gadgetron_python</dll>
      <classname>PythonGadget</classname>
      <property><name>python_path</name>                  <value>/home/myuser/scripts/python</value></property>
      <property><name>python_module</name>                <value>IDEAL</value></property>
      <property><name>python_class</name>                <value>IDEAL</value></property>
	  <property><name>frequencies</name> <value>392.0,267.0,177.0,0,-324.0</value></property>
    </gadget>



    <gadget>
	    <name>SensePrep</name>
	    <dll>gadgetron_gpuparallelmri</dll>
	    <classname>gpuBufferSensePrepGadget</classname>
	    <property><name>profiles_per_frame</name><value>1</value></property>
    </gadget>
 
  <gadget>
    <name>gpuCgSenseGadget</name>
    <dll>gadgetron_gpuparallelmri</dll>
    <classname>gpuCgSenseGadget</classname>
    <property><name>pass_on_undesired_data</name>  <value>true</value></property>
    <property><name>deviceno</name>                <value>0</value></property>
    <property><name>number_of_iterations</name>    <value>30</value></property>
    <property><name>cg_limit</name>                <value>1e-6</value></property>
    <property><name>oversampling_factor</name>     <value>2</value></property>
    <property><name>kernel_width</name>            <value>7.5</value></property>
    <property><name>kappa</name>                   <value>0.6</value></property>
    <property><name>output_convergence</name><value>true</value></property>
    <property><name>save_individual_frames</name><value>false</value></property>
  </gadget>

     <gadget>
    <name>Extract</name>
    <dll>gadgetron_mricore</dll>
    <classname>ExtractGadget</classname>
  </gadget>
 <gadget>
      <name>ImageFinish</name>
      <dll>gadgetron_mricore</dll>
      <classname>ImageFinishGadget</classname>
    </gadget>
</gadgetronStreamConfiguration>
