<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">
         
    <reader>
      <slot>1008</slot>
      <dll>gadgetron_mricore</dll>
      <classname>GadgetIsmrmrdAcquisitionMessageReader</classname>
    </reader>
    <writer>
      <slot>1004</slot>
      <dll>gadgetron_mricore</dll>
      <classname>MRIImageWriterCPLX</classname>
    </writer>
    <writer>
      <slot>1005</slot>
      <dll>gadgetron_mricore</dll>
      <classname>MRIImageWriterFLOAT</classname>
    </writer>
    <writer>
      <slot>1006</slot>
      <dll>gadgetron_mricore</dll>
      <classname>MRIImageWriterUSHORT</classname>
    </writer>

    <gadget>
      <name>NoiseAdjust</name>
      <dll>gadgetron_mricore</dll>
      <classname>MRINoiseAdjustGadget</classname>
    </gadget>

    <gadget>
      <name>RemoveROOversampling</name>
      <dll>gadgetron_mricore</dll>
      <classname>RemoveROOversamplingGadget</classname>
    </gadget>

    <gadget>
      <name>PCA</name>
      <dll>gadgetron_mricore</dll>
      <classname>PCACoilGadget</classname>
    </gadget>

    <gadget>
      <name>CoilReduction</name>
      <dll>gadgetron_mricore</dll>
      <classname>CoilReductionGadget</classname>
      <property><name>coils_out</name><value>8</value></property>
    </gadget>
    
    <gadget>
      <name>gpuFixedRadialSensePrepGadget</name>
      <dll>gadgetron_gpuradial</dll>
      <classname>gpuFixedRadialSensePrepGadget</classname>
      <property><name>deviceno</name><value>0</value></property>
      <property><name>use_multiframe_grouping</name><value>false</value></property>
      <property><name>convolution_kernel_width</name><value>5.5</value></property>
      <property><name>convolution_oversampling_factor</name><value>2.0</value></property>
    </gadget>
    
    <gadget>
      <name>gpuSbSenseGadget</name>
      <dll>gadgetron_gpusense</dll>
      <classname>gpuSbSenseGadget</classname>
      <property><name>deviceno</name>                <value>0</value></property>
      <property><name>number_of_cg_iterations</name> <value>10</value></property>
      <property><name>number_of_sb_iterations</name> <value>10</value></property>
      <property><name>cg_limit</name>                <value>1e-6</value></property>
      <property><name>oversampling</name>            <value>1.25</value></property>
      <property><name>kernel_width</name>            <value>5.5</value></property>
      <property><name>mu</name>                      <value>1.0</value></property>
      <property><name>lambda</name>                  <value>2.0</value></property>
      <property><name>alpha</name>                   <value>0.5</value></property>
    </gadget>

     <gadget>
      <name>Extract</name>
      <dll>gadgetron_mricore</dll>
      <classname>ExtractGadget</classname>
    </gadget>

    <!--
	<gadget>
	<name>ImageWrite</name>
	<dll>gadgetron_mricore</dll>
	<classname>ImageWriterGadgetFLOAT</classname>
	</gadget>
    -->
    
    <gadget>
      <name>AutoScale</name>
      <dll>gadgetron_mricore</dll>
      <classname>AutoScaleGadget</classname>
    </gadget>
        
    <gadget>
      <name>FloatToShort</name>
      <dll>gadgetron_mricore</dll>
      <classname>FloatToUShortGadget</classname>
    </gadget>
    
    <!--
	<gadget>
	<name>ImageFinishCPLX</name>
	<dll>gadgetron_mricore</dll>
	<classname>ImageFinishGadgetCPLX</classname>
	</gadget>
    -->
    
    <!--
	<gadget>
	<name>ImageFinishFLOAT</name>
	<dll>gadgetron_mricore</dll>
	<classname>ImageFinishGadgetFLOAT</classname>
	</gadget>
    -->
    
    <gadget>
      <name>ImageFinishUSHORT</name>
      <dll>gadgetron_mricore</dll>
      <classname>ImageFinishGadgetUSHORT</classname>
    </gadget>
    
</gadgetronStreamConfiguration>
