<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
                              xmlns="http://gadgetron.sf.net/gadgetron"
                              xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">
  
  <reader>
    <slot>1008</slot>
    <dll>gadgetron_mricore</dll>
    <classname>GadgetIsmrmrdAcquisitionMessageReader</classname>
  </reader>
  <writer>
    <slot>1004</slot>
    <dll>gadgetron_mricore</dll>
    <classname>MRIImageWriterCPLX</classname>
  </writer>
  <writer>
    <slot>1005</slot>
    <dll>gadgetron_mricore</dll>
    <classname>MRIImageWriterFLOAT</classname>
  </writer>
  <writer>
    <slot>1006</slot>
    <dll>gadgetron_mricore</dll>
    <classname>MRIImageWriterUSHORT</classname>
  </writer>

  <gadget>
    <name>NoiseAdjust</name>
    <dll>gadgetron_mricore</dll>
    <classname>NoiseAdjustGadget</classname>
  </gadget>

  <gadget>
    <name>PCA</name>
    <dll>gadgetron_mricore</dll>
    <classname>PCACoilGadget</classname>
  </gadget>

  <gadget>
    <name>CoilReduction</name>
    <dll>gadgetron_mricore</dll>
    <classname>CoilReductionGadget</classname>
    <property><name>coils_out</name><value>16</value></property>
  </gadget>
  
  <gadget>
    <name>gpuRetroGatedSensePrepGadget</name>
    <dll>gadgetron_gpuradial</dll>
    <classname>gpuRetroGatedSensePrepGadget</classname>
    <property><name>deviceno</name><value>0</value></property>
    <property><name>mode</name><value>3</value></property>
    <property><name>profiles_per_frame</name><value>24</value></property>
    <property><name>frames_per_cardiac_cycle</name><value>30</value></property>
    <property><name>buffer_using_solver</name><value>true</value></property>
    <property><name>profiles_per_buffer_frame</name><value>32</value></property>
    <property><name>number_of_buffer_frames_inner</name><value>12</value></property>
    <property><name>number_of_buffer_frames_outer</name><value>2</value></property>    
    <property><name>buffer_convolution_kernel_width</name><value>5.5</value></property>
    <property><name>buffer_convolution_oversampling_factor</name><value>1.5</value></property>
    <property><name>reconstruction_os_factor_x</name><value>1.5</value></property>
    <property><name>reconstruction_os_factor_y</name><value>1.5</value></property>
  </gadget>

  <gadget>
    <name>gpuSbSenseGadget_slice0</name>
    <dll>gadgetron_gpuparallelmri</dll>
    <classname>gpuSbSenseGadget</classname>
    <property><name>pass_on_undesired_data</name>  <value>true</value></property>
    <property><name>deviceno</name>                <value>0</value></property>
    <property><name>sliceno</name>                 <value>0</value></property>
    <property><name>number_of_sb_iterations</name> <value>30</value></property>
    <property><name>number_of_cg_iterations</name> <value>20</value></property>
    <property><name>cg_limit</name>                <value>1e-6</value></property>
    <property><name>oversampling_factor</name>     <value>1.5</value></property>
    <property><name>kernel_width</name>            <value>5.5</value></property>
    <property><name>mu</name>                      <value>1.0</value></property>
    <property><name>lambda</name>                  <value>2.0</value></property>
    <property><name>alpha</name>                   <value>0.5</value></property>
    <property><name>output_convergence</name><value>true</value></property>
  </gadget>

  <gadget>
    <name>Extract</name>
    <dll>gadgetron_mricore</dll>
    <classname>ExtractGadget</classname>
  </gadget>
  
  <gadget>
    <name>ImageFinishFLOAT</name>
    <dll>gadgetron_mricore</dll>
    <classname>ImageFinishGadgetFLOAT</classname>
  </gadget>
  
</gadgetronStreamConfiguration>
